PsychoPy2experiment version="1.84.2+brain4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Save tag file = True
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = budzikp
  Screen = 1
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Routines
  Routine select
    ImageComponent image
      image [set every repeat] = $object1 + ".png"
      tagParams [set every repeat] = {}
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.8)
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    ImageComponent image_2
      image [set every repeat] = $object2 + ".png"
      tagParams [set every repeat] = {}
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.8)
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    MouseComponent mouse
      tagParams [set every repeat] = {}
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = on click
    PolygonComponent polygon
      tagParams [set every repeat] = {}
      startVal [time (s)] = 0.0
      size = (2, 0.5)
      fillColor = $[1,1,1]
      nVertices = 2
      ori = 90
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  Routine eval
    CodeComponent evaluateAnswer
      tagParams [set every repeat] = {}
      Begin Routine:
        from enum import Enum

        class Side(Enum):
            LEFT = 0
            RIGHT = 1

        class Answer:
            def __init__(self):
                self.side = None
                self.isCorrect = False

        ans = Answer()
        if (mouse.x[-1] <= 0):
            ans.side = Side.LEFT
        else:
            ans.side = Side.RIGHT

        if (str(correct) == str(object1)):
            corrSide = Side.LEFT
        else:
            corrSide = Side.RIGHT

        ans.isCorrect = ans.side == corrSide
        print(ans.isCorrect)
    CodeComponent highlightSelection
      tagParams [set every repeat] = {}
      Begin Routine:
        if (ans.side == Side.LEFT):
            highlight_pos = (-1, 0)
        else:
            highlight_pos = (1, 0)
    PolygonComponent polygon_2
      tagParams [set every repeat] = {}
      pos [set every repeat] = $highlight_pos
      startVal [time (s)] = 0.0
      size = (2, 2)
      fillColor = $[0.6,0.6,1]
      stopVal [duration (s)] = 2
      lineColor = $[0.6,0.6,1]
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    ImageComponent image_3
      image [set every repeat] = $object1 + ".png"
      tagParams [set every repeat] = {}
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.8)
      stopVal [duration (s)] = 2
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    ImageComponent image_4
      image [set every repeat] = $object2 + ".png"
      tagParams [set every repeat] = {}
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.8)
      stopVal [duration (s)] = 2
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    CodeComponent logAnswer
      tagParams [set every repeat] = {}
      End Routine:
        trials.addData('ans.isCorrect', ans.isCorrect)
  Routine instr
    TextComponent text
      tagParams [set every repeat] = {}
      text [set every repeat] = "Wybierz obiekt:\n" + $correct
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      tagParams [set every repeat] = {}
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'object1': u'circle', 'object2': u'square', 'correct': u'square'},
      {'object1': u'square', 'object2': u'triangle', 'correct': u'triangle'}]
    Routine instr
    Routine select
    Routine eval
  LoopTerminator trials
